CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:400
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'â\x80\x94', 'The rule critieria specified will match one file only: â\x80\x94W00001â\x80\x94P00001â\x80\x94Z00000â\x80\x94T00000â\x80\x94cherry.tif']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "--W00001")
    Name to assign these images:Grayscale
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the well containing the worms.']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
    Select the input image:Grayscale
    Name the primary objects to be identified:UncorrectedNuclei
    Typical diameter of objects, in pixel units (Min,Max):20,50
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
CorrectIlluminationCalculate:[module_num:6|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notes:['In this instance, we are doing background correction with a small block size and median filtering. Note that the worms are still visible in the illumination function.']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
    Select the input image:Grayscale
    Name the output image:SmallBlockIllum
    Select how the illumination function is calculated:Background
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    Block size:8
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:16
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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notes:['Now apply the illumination function to the original image and examine the result.']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
    Select the input image:Grayscale
    Name the output image:SmallBlockCorrected
    Select the illumination function:SmallBlockIllum
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:SmallBlockCorrected
    Name the primary objects to be identified:SmallBlockCorrectedNuclei
    Typical diameter of objects, in pixel units (Min,Max):20,50
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
CorrectIlluminationCalculate:[module_num:9|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notes:['In this instance, we are doing background correction with a larger block size and median filtering. This gets rid of the worm-like artifacts, but is still a bit blocky.']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
    Select the input image:Grayscale
    Name the output image:LargeBlockIllum
    Select how the illumination function is calculated:Background
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    Block size:20
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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notes:['Apply the illumination function to the original image and examine the result.']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
    Select the input image:Grayscale
    Name the output image:LargeBlockCorrected
    Select the illumination function:LargeBlockIllum
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:LargeBlockCorrected
    Name the primary objects to be identified:LargeBlockCorrectedNuclei
    Typical diameter of objects, in pixel units (Min,Max):20,50
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
ConvertObjectsToImage:[module_num:12|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notes:['Benchmark-only export of terminal object labels; processing settings above are unchanged.']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
    Select the input objects:UncorrectedNuclei
    Name the output image:OpenHCSReferenceLabels_UncorrectedNuclei
    Select the color format:uint16
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
SaveImages:[module_num:13|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notes:['Benchmark-only export of an existing terminal artifact; processing settings above are unchanged.']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
    Select the type of image to save:Image
    Select the image to save:OpenHCSReferenceLabels_UncorrectedNuclei
    Select method for constructing file names:Single name
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    Enter single file name:reference_labels__UncorrectedNuclei
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:14|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notes:['Benchmark-only export of terminal object labels; processing settings above are unchanged.']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
    Select the input objects:SmallBlockCorrectedNuclei
    Name the output image:OpenHCSReferenceLabels_SmallBlockCorrectedNuclei
    Select the color format:uint16
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
SaveImages:[module_num:15|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notes:['Benchmark-only export of an existing terminal artifact; processing settings above are unchanged.']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
    Select the type of image to save:Image
    Select the image to save:OpenHCSReferenceLabels_SmallBlockCorrectedNuclei
    Select method for constructing file names:Single name
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    Enter single file name:reference_labels__SmallBlockCorrectedNuclei
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:16|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notes:['Benchmark-only export of terminal object labels; processing settings above are unchanged.']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
    Select the input objects:LargeBlockCorrectedNuclei
    Name the output image:OpenHCSReferenceLabels_LargeBlockCorrectedNuclei
    Select the color format:uint16
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
SaveImages:[module_num:17|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notes:['Benchmark-only export of an existing terminal artifact; processing settings above are unchanged.']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
    Select the type of image to save:Image
    Select the image to save:OpenHCSReferenceLabels_LargeBlockCorrectedNuclei
    Select method for constructing file names:Single name
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    Enter single file name:reference_labels__LargeBlockCorrectedNuclei
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
