CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:420
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your analysis.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module (optional) allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be extracted from the imageâx80x99s file name and/or location, or from an external file.']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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Plate": "text", "FileLocation": "text", "Series": "text", "Frame": "text", "Well": "text", "Site": "text", "Dose": "float", "ChannelNumber": "text", "PosNegCtrls": "text"}
    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Import from file
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    Extract metadata from:All images
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    Metadata file location:Default Input Folder|Downloads/TranslocationData
    Match file and image metadata:[{'Image Metadata': u'Well', 'CSV Metadata': u'Well'}]
    Use case insensitive matching?:No
    Metadata file name:Translocation_doses_and_controls.csv
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "w2")
    Name to assign these images:rawDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w1")
    Name to assign these images:rawGFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module (optional) allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, separate time-lapse movies, 3D stacks, etc.']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['IdentifyPrimaryObjects takes an input image and identifies biological objects of interest, for example nuclei from a DNA-stained image, or colonies on an agar plate.']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
    Select the input image:rawDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:4.0
    Lower and upper bounds on threshold:0,1.0
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    Lower outlier fraction:0.02
    Upper outlier fraction:0.02
    Averaging method:Mode
    Variance method:Standard deviation
    # of deviations:0
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
ConvertObjectsToImage:[module_num:6|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notes:['Benchmark-only export of terminal object labels; processing settings above are unchanged.']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
    Select the input objects:Nuclei
    Name the output image:OpenHCSReferenceLabels_Nuclei
    Select the color format:uint16
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
SaveImages:[module_num:7|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notes:['Benchmark-only export of an existing terminal artifact; processing settings above are unchanged.']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
    Select the type of image to save:Image
    Select the image to save:OpenHCSReferenceLabels_Nuclei
    Select method for constructing file names:Single name
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    Enter single file name:reference_labels__Nuclei
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
